<?xml version="1.0" encoding="utf-8"?>
<MethodSet>
  <DeleteAllMethods>false</DeleteAllMethods>
  <PreMethod methodName="PRE25" creator="FOrtner" dateTime="2020-08-26T12:37:38.0187372+02:00">
    <TargetBlockTemperature>27</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <PreMethod methodName="PRE26" creator="FOrtner" dateTime="2020-08-26T12:42:38.2141004+02:00">
    <TargetBlockTemperature>26</TargetBlockTemperature>
    <TargetLidTemp>110</TargetLidTemp>
  </PreMethod>
  <Method methodName="m25" creator="FOrtner" dateTime="2020-08-26T12:39:03.6276924+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>1</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.1</Slope>
      <PlateauTemperature>26</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <Step>
      <Number>2</Number>
      <Slope>0.1</Slope>
      <PlateauTemperature>27</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
  <Method methodName="m26" creator="FOrtner" dateTime="2020-09-01T15:16:18.2165095+02:00">
    <Variant>960000</Variant>
    <PlateType>0</PlateType>
    <FluidQuantity>0</FluidQuantity>
    <PostHeating>false</PostHeating>
    <StartBlockTemperature>25</StartBlockTemperature>
    <StartLidTemperature>110</StartLidTemperature>
    <Step>
      <Number>1</Number>
      <Slope>0.1</Slope>
      <PlateauTemperature>27</PlateauTemperature>
      <PlateauTime>1</PlateauTime>
      <OverShootSlope1>0.1</OverShootSlope1>
      <OverShootTemperature>0</OverShootTemperature>
      <OverShootTime>0</OverShootTime>
      <OverShootSlope2>0.1</OverShootSlope2>
      <GotoNumber>0</GotoNumber>
      <LoopNumber>0</LoopNumber>
      <PIDNumber>1</PIDNumber>
      <LidTemp>110</LidTemp>
    </Step>
    <PIDSet>
      <PID number="1">
        <PHeating>60</PHeating>
        <PCooling>80</PCooling>
        <IHeating>250</IHeating>
        <ICooling>100</ICooling>
        <DHeating>10</DHeating>
        <DCooling>10</DCooling>
        <PLid>100</PLid>
        <ILid>70</ILid>
      </PID>
    </PIDSet>
  </Method>
</MethodSet>